PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 9.60trial3
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    MouseComponent mouse
      clickable = image
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable = name,image
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      timeRelativeTo = routine
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  Routine instruction
    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this experiment, you will see a total of 30 images. You will see each image for 5 seconds. In these 5 seconds, please click the part of the image that you find the most salient or attention-grabbing.

        Press any key to begin!
    KeyboardComponent key_resp
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimulus_sheet.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus': '/Users/alexisyang/Desktop/9.60trial3/stimuli copy/aaron-burden-xNsoHwvoHnY-unsplash.jpeg'},
      {'stimulus': '/Users/alexisyang/Desktop/9.60trial3/stimuli copy/alexandre-chambon-ADqQgiStp4c-unsplash.jpeg'},
      {'stimulus': '/Users/alexisyang/Desktop/9.60trial3/stimuli copy/anthony-intraversato-xr43RescWSA-unsplash.jpeg'},
      {'stimulus': '/Users/alexisyang/Desktop/9.60trial3/stimuli copy/arjun-kapoor-Om3JbZp3CCo-unsplash.jpeg'},
      {'stimulus': '/Users/alexisyang/Desktop/9.60trial3/stimuli copy/chris-leipelt-fqoHScXjiW4-unsplash.jpeg'},
      {'stimulus': '/Users/alexisyang/Desktop/9.60trial3/stimuli copy/chuttersnap-6ELMRvIuJ1g-unsplash.jpeg'},
      {'stimulus': '/Users/alexisyang/Desktop/9.60trial3/stimuli copy/daniel-mirlea-w4lzk2_Yasc-unsplash.jpeg'},
      {'stimulus': '/Users/alexisyang/Desktop/9.60trial3/stimuli copy/daniela-cuevas-t7YycgAoVSw-unsplash.jpeg'},
      {'stimulus': '/Users/alexisyang/Desktop/9.60trial3/stimuli copy/darya-sev-QRdX9dO8poY-unsplash.jpeg'},
      {'stimulus': '/Users/alexisyang/Desktop/9.60trial3/stimuli copy/dave-hoefler-oi65oz2xNag-unsplash.jpeg'},
      {'stimulus': '/Users/alexisyang/Desktop/9.60trial3/stimuli copy/diego-ph-xW42e724p00-unsplash.jpeg'},
      {'stimulus': '/Users/alexisyang/Desktop/9.60trial3/stimuli copy/drew-farwell-ScLYGfuCqQg-unsplash.jpeg'},
      {'stimulus': '/Users/alexisyang/Desktop/9.60trial3/stimuli copy/eberhard-grossgasteiger-fTlXjG24mQ0-unsplash.jpeg'},
      {'stimulus': '/Users/alexisyang/Desktop/9.60trial3/stimuli copy/gritt-zheng-K88BVN6yMrU-unsplash.jpeg'}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
    Routine trial
  LoopTerminator trials
